OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.1.0)
Comment
  This part allows for exporting a spectrum through LSL.
  Use the script receivePlotFft.py for reception+visualization
Comment
  This part allows for exporting connectivity matrices through LSL.
  Use the script receivePlotConnectivity.py for reception+visualization

  For better speed, you can reduce the number of selected channels

Generic stream reader => #0
  Filename = C:/Users/arthur.desbois/Documents/dev/openvibeScripting/BCI-viz/sub-01_ses-01_task-RunXX_eeg[17.08.11].ov
#0.Output Signal -> Channel Selector "FP2;AF4;AF8;F2;F4;F6;F8;FC2;FC4;FC6;FT8;FT10;C2;C4;C6;T8;CP2;CP4;CP6;TP8;P2;P4;P6;P8;PO4;PO8;O2;PO10;Oz;POz;Pz;CPz;Cz;FCz;Fz;O1;PO9;PO3;PO7;P1;P3;P5;P7;CP1;CP3;CP5;TP7;TP9;C1;C3;C5;T7;FC1;FC3;FC5;FT7;F1;F3;F5;F7;AF3;AF7;FP1" => #1
  Channel List = FP2;AF4;AF8;F2;F4;F6;F8;FC2;FC4;FC6;FT8;FT10;C2;C4;C6;T8;CP2;CP4;CP6;TP8;P2;P4;P6;P8;PO4;PO8;O2;PO10;Oz;POz;Pz;CPz;Cz;FCz;Fz;O1;PO9;PO3;PO7;P1;P3;P5;P7;CP1;CP3;CP5;TP7;TP9;C1;C3;C5;T7;FC1;FC3;FC5;FT7;F1;F3;F5;F7;AF3;AF7;FP1
  Action = Select
  Channel Matching Method = Name
-> Connectivity Measure => #2
  Metric = MagnitudeSquaredCoherence
  Welch Window method = Hann
  Welch Window Length (in sec) = 0.5
  Welch Window Overlap (in %) = 50
  Connectivity Measure Length (in sec) = 4
  Connectivity Measure Overlap (in %) = 50
  FFT size (frequency taps) = 256
  DC removal = false
-> 0x341d3912 NxN 64Hz
  Dimension to remove = 0
  Index in removed dimension = 32
-> 0x341d3912 Matrix Display "64Hz - MSC"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = true
  Real time min/max = false
#2 -> NxN 16Hz => #5
  Dimension to remove = 0
  Index in removed dimension = 8
-> 0x341d3912 Matrix Display "16Hz - MSC"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = true
  Real time min/max = false
Input signal=#5 -> LSL Export
  Signal stream = openvibeConnectMSC
  Marker stream = openvibeMarkers
#1 -> Connectivity Measure => #8
  Metric = AbsImaginaryCoherence
  Welch Window method = Hann
  Welch Window Length (in sec) = 0.5
  Welch Window Overlap (in %) = 50
  Connectivity Measure Length (in sec) = 4
  Connectivity Measure Overlap (in %) = 50
  FFT size (frequency taps) = 256
  DC removal = false
-> 0x341d3912 NxN 64Hz
  Dimension to remove = 0
  Index in removed dimension = 32
-> 0x341d3912 Matrix Display "64Hz - ImCoh"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = true
  Real time min/max = false
#8 -> NxN 16Hz => #11
  Dimension to remove = 0
  Index in removed dimension = 8
-> 0x341d3912 Matrix Display "16Hz - ImCoh"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = true
  Real time min/max = false
Input signal=#11 -> LSL Export
  Signal stream = openvibeConnectImCoh
  Marker stream = openvibeMarkers
#0.Output Signal -> 0x341d3912 Channel Selector "C2" => #14
  Channel List = C2
  Action = Select
  Channel Matching Method = Name
-> 0x341d3912 Time based epoching => #15
  Epoch duration (in sec) = 0.25
  Epoch intervals (in sec) = 0.25
-> 0x341d3912 Windowing
  Window method = Hanning
-> 0x341d3912 Spectral Analysis => #17
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#17.Amplitude -> 0x341d3912 Instant bars_t
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = true
  Gain = 0.01
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
#17.Amplitude -> 0x341d3912 Matrix Transpose => #19
Input signal=#19 -> 0x341d3912 LSL Export
  Signal stream = openvibeFft
  Marker stream = openvibeMarkers
Data=#15 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#14 -> 0x341d3912 LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers

0x341d3912 Channel Selector "Cz;CPz;C2;CP2;C4;CP4;C1;CP1"
  Channel List = Cz;CPz;C2;CP2;C4;CP4;C1;CP1
  Action = Select
  Channel Matching Method = Name
